' For CR1000X + VOLT116 with IRGASON + EC100

' Equipment to be used

' Datalogger:
'     CR1000X
'     VOLT116
' Flux: 
'     IRGASON + EC100 (SDM)
' Radiation
'     PAR: Apogee SQ610 (analog)
'     Rnet: Kipp & Zonen CNR4 (analog)
' Met:
'     Temp/RH: CS Hygrovue 10 (SDI12) + Apogee TS100 aspirated shield
'     Pressure: CS Barovue 10 (SDI12)
'     Wind: RM Young 05103 (analog)
'     Precip: ???
'     Rain/Snow: radar rain gauge????
' Soil:
'     Soil Moisture: Stevens Hydraprobe x???
'     Soil Heat Flux: ???


PipeLineMode
AngleDegrees
PreserveVariables

' User defined constants, can be modified on the logger easily
ConstTable(Const_Table)
    ' Program function constants
    Const FAST_INTV = 50  ' ms, scan interval for high frequency instruments
    Const FAST_FREQ = 1000 INTDV FAST_INTV  ' Hz, frequency for high frequency instruments
    Const FAST_SCAN_BUFFER_SIZE = 60 * (1000 INTDV FAST_INTV)  ' 60 second scan buffer
    Const NDAYS_FAST_CRD = 1  ' Number of days to store in the fast data CRD file

    Const SLOW_INTV = 1  ' min
    Const NDAYS_SLOW_CRD = 7

    Const STATS_INTV = 30  ' min, interval to store slow data
    Const NDAYS_STATS_CPU = 7  ' Number of days of slow data to store on the CPU
    Const STATS_TABLE_SIZE = Ceiling((NDAYS_STATS_CPU*1440/STATS_INTV))  ' number of records
    Const NDAYS_STATS_CRD = 30  ' Number of days to store in the slow data CRD file

    ' IRGASON
    Const SN_IRGASON = 2556
    Const SDM_CLK_SPEED = 30  ' us
    Const ADR_SDM_EC100 = 1

    ' CNR4
    Const SN_CNR4 = 244541
    Const CHAN_DIFF_CNR4 = 1
    Const CHAN_SE_CNR4 = 9
    Const CHAN_EX_CNR4 = 1 
    Const SW_UPPER_MULT = 1000.0 / 12.6  ' uV W-1 m2 -> W m-2 mV-1
    Const SW_LOWER_MULT = 1000.0 / 14.22
    Const LW_UPPER_MULT = 1000.0 / 9.19
    Const LW_LOWER_MULT = 1000.0 / 9.84

    ' BaroVUE 10
    Const SN_BAROVUE10 = 9999  ' placeholder
    Const CHAN_C_BAROVUE10 = 1
    Const ADR_SDI12_BAROVUE10 = 1
    Const CMD_SDI12_BAROVUE10 = "M1!"  ' might have to switch to C1?

    ' HygroVUE 10
    Const SN_HYGROVUE10 = 9999  ' placeholder
    Const CHAN_C_HYGROVUE10 = 1
    Const ADR_SDI12_HYGROVUE10 = 2
    Const CMD_SDI12_HYGROVUE10 = "M3!"  ' might have to switch to MC3?

    ' SI-111 SS
    Const SN_SI111 = 9999  ' placeholder
    Const CHAN_SE_SI111 = 10
    Const CHAN_EX_SI111 = 1
    Const CHAN_DIFF_SI111 = 6
    Const m2 = 91266.1
    Const m1 = 10507600.0
    Const m0 = 1641750000.0
    Const b2 = 1175.15
    Const b1 = -30659.0
    Const b0 = -8708830.0
EndConstTable

'====================================
' Defining meteorologic variables
'====================================

'IRGASON
'=======
' Raw data from EC100 command
Public irgason(12)
Alias irgason(1) ux; Units ux = m s-1
Alias irgason(2) uy; Units uy = m s-1
Alias irgason(3) uz; Units uz = m s-1
Alias irgason(4) sonic_temp; Units sonic_temp = degC
Alias irgason(5) sonic_diag; Units sonic_diag = unitless
Alias irgason(6) rho_co2; Units rho_co2 = mg m-3
Alias irgason(7) rho_h2o; Units rho_h2o = g m-3
Alias irgason(8) irga_diag; Units irga_diag = unitless
Alias irgason(9) cell_temp; Units cell_temp = degC
Alias irgason(10) cell_press; Units cell_press = kPa
Alias irgason(11) co2_signal; Units co2_signal = unitless
Alias irgason(12) h2o_signal; Units h2o_signal = unitless

' ' Data to be computed
' Public CO2; Units CO2 = umolCO2 mol-1
' Public CO2_MIXING_RATIO; Units CO2_MIXING_RATIO = umolCO2 mol-1
' Public H2O; Units H2O = mmolH2O mol-1
' Public H2O_MIXING_RATIO; Units H2O_MIXING_RATIO = mmolH2O mol-1

' Diagnostic flags to be computed
Dim disable_sonic as Boolean  ' flags for computing averages
Dim disable_irga as Boolean  ' flags for computing averages

' Datalogger
' ==========
Public panel_temp; Units panel_temp = degC
Public battery; Units battery = V

' CNR4
' =====
' data
Public cnr4_raw(4)
Alias cnr4_raw(1) sw_in_raw; Units sw_in_raw = mV
Alias cnr4_raw(2) sw_out_raw; Units sw_out_raw = mV
Alias cnr4_raw(3) lw_in_raw; Units lw_in_raw = mV
Alias cnr4_raw(4) lw_out_raw; Units lw_out_raw = mV
Public cnr4(4)
Alias cnr4(1) sw_in; Units sw_in = W m-2
Alias cnr4(2) sw_out; Units sw_out = W m-2
Alias cnr4(3) lw_in; Units lw_in = W m-2
Alias cnr4(4) lw_out; Units lw_out = W m-2
Public cnr4_temp; Units cnr4_temp = degC
Dim cnr4_temp_k, Rs, Vs_Vx

' BaroVUE 10
' ==========
Public barovue10(3)
Alias barovue10(1) bv10_press; Units bv10_press = kPa
Alias barovue10(2) bv10_temp; Units bv10_temp = degC
Alias barovue10(3) bv10_diag; Units bv10_diag = unitless

' HygroVUE 10
' ===========
Public hygrovue10(4)
Alias hygrovue10(1) hv10_temp; Units hv10_temp = degC
Alias hygrovue10(2) hv10_rh; Units hv10_rh = pct
Alias hygrovue10(3) hv10_dew_point; Units hv10_dew_point = degC
Alias hygrovue10(4) hv10_vapor_press; Units hv10_vapor_press = kPa

' SI-111 SS
' ==========
Public si111_raw(2)
Alias si111_raw(1) si111_temp; Units si111_temp = degC
Alias si111_raw(2) si111_surf_temp_raw; Units si111_surf_temp_raw = mV
Public si111_surf_temp; Units si111_surf_temp = degC

DataTable(FastData, TRUE, -1)
    DataInterval(0, FAST_INTV, mSec, 0)
    TableFile("CRD:"&Status.SerialNumber(1,1)&"_Fast", 64, -1, 0, NDAYS_FAST_CRD, Day, 0, 0)
    ' N.B. The sensor noise of the IRGASON for the sonic temperature and CO2 density
    ' measurements is such that using FP2 precision is acceptable.
    ' Sonic temp RMSE noise: 0.025
    ' FP2 precision (-80 to +80): 0.01
    ' CO2 density RMSE noise: 0.2
    ' FP2 precision (-800 to +800): 0.1
    ' All other measurements require float32 precision (except diagnostics)
    Sample(1, ux, IEEE4)
    Sample(1, uy, IEEE4)
    Sample(1, uz, IEEE4)
    Sample(1, sonic_temp, FP2)
    Sample(1, sonic_diag, UINT2)
    Sample(1, rho_co2, FP2)
    Sample(1, rho_h2o, IEEE4)
    Sample(1, irga_diag, UINT4)
EndTable

DataTable(SlowStatsData, TRUE, STATS_TABLE_SIZE)
    DataInterval(0, STATS_INTV, Min, 0)
    TableFile("CPU:"&Status.SerialNumber(1,1)&"_SlowStats", 64 -1, 0, NDAYS_STATS_CRD, Day, 0, 0)

    Minimum(1, battery, FP2, FALSE, FALSE)
    Average(1, panel_temp, FP2, FALSE, FALSE)

    ' Summaries of fast data
    Average(1, ux, IEEE4, disable_sonic)
    Average(1, uy, IEEE4, disable_sonic)
    Average(1, uz, IEEE4, disable_sonic)
    StdDev(1, ux, IEEE4, disable_sonic)
    StdDev(1, uy, IEEE4, disable_sonic)
    StdDev(1, uz, IEEE4, disable_sonic)

    Average(1, sonic_temp, IEEE4, disable_sonic)
    StdDev(1, sonic_temp, IEEE4, disable_sonic)

    Average(1, rho_co2, IEEE4, disable_irga)
    StdDev(1, rho_co2, IEEE4, disable_irga)
    Average(1, rho_h2o, IEEE4, disable_irga)
    StdDev(1, rho_h2o, IEEE4, disable_irga)

    Average(1, cell_temp, IEEE4, FALSE)
    Average(1, cell_press, IEEE4, FALSE)

    Totalize(1, disable_sonic, UINT2)
    Totalize(1, disable_irga, UINT2)

    ' CNR4
    Average(4, sw_in, IEEE4, FALSE)
    Average(1, cnr4_temp, IEEE4, FALSE)

    ' Barovue10 temperature, pressure, diagnostic
    Average(3, bv10_press, IEEE4, FALSE)

    ' Hygrovue10, temp, rh, dp, vp
    Average(4, hv10_temp, IEEE4, FALSE)

    ' SI-111 SS
    Average(1, si111_temp, IEEE4, FALSE)
    Average(1, si111_surf_temp, IEEE4, FALSE)

EndTable

DataTable(SlowRawData, TRUE, -1)
    DataInterval(0, SLOW_INTV, Min, 0)
    TableFile("CPU:"&Status.SerialNumber(1,1)&"_SlowRaw", 64 -1, 0, NDAYS_SLOW_CRD, Day, 0, 0)

    ' datalogger
    Sample(1, battery, FP2)
    Sample(1, panel_temp, FP2)

    ' cnr4
    Sample(4, sw_in, FP2)
    Sample(4, sw_in_raw, FP2)
    Sample(1, cnr4_temp, FP2)

    ' barovue10 tmperature, pressure, diagnostic
    Sample(3, press, FP2)

    ' hygrovue10, temp, rh, dp, vp
    Sample(4, hv10_temp, FP2)

    ' SI-111 SS
    Sample(1, si111_temp, FP2)
    Sample(1, si111_surf_temp_raw, FP2)
EndTable

'====================================
' Main Program
'====================================
BeginProg
    SDMSpeed(SDM_CLK_SPEED)
    Scan(FAST_INTV, mSec, FAST_SCAN_BUFFER_SIZE, 0)
        EC100(irgason, ADR_SDM_EC100, 1)
        
        disable_sonic = FALSE
        disable_irga = FALSE
        disable_sonic = (sonic_diag <> 0)
        disable_irga = (irga_diag <> 0)
        If disable_sonic Then ux = NAN : uy = NAN : uz = NAN : sonic_temp = NAN
        If disable_irga Then rho_co2 = NAN : rho_h2o = NAN
        
        CallTable FastData
    NextScan

SlowSequence
    Scan(SLOW_INTV, Min, 7, 0)
        PanelTemp(panel_temp, 60)
        Battery(battery)

        ' CNR4
        VoltDiff(cnr4_raw, 4, mV200, CHAN_DIFF_CNR4, True, 0, 60, 1, 0)
        BrHalf(Vs_Vx, 1, mV5000, CHAN_SE_CNR4, CHAN_EX_CNR4, 1, 2500 TRUE, 0, 250, 1.0, 0)
        
        Rs = 1000*(Vs_Vx/(1-Vs_Vx))
        cnr4_temp_k = 1/(1.0295e-3+2.391e-4*LN(Rs)+1.568e-7*(LN(Rs))^3)
        cnr4_temp = cnr4_temp_k - 273.15

        sw_in = sw_in_raw * SW_UPPER_MULT
        sw_out = sw_out_raw * SW_LOWER_MULT
        lw_in = (lw_in_raw * LW_UPPER_MULT) + (5.67e-8 * cnr4_temp_k^4)
        lw_out = (lw_out_raw * LW_LOWER_MULT) + (5.67e-8 * (cnr4_temp_k^4))

        ' BaroVUE and HygroVUE 10 press, temp, rh, dp, vp
        SDI12(barovue10, CHAN_C_BAROVUE_10, ADR_SDI12_BAROVUE10, CMD_SDI12_BAROVUE10, 1, 0.0, -1)
        SDI12(hygrovue10, CHAN_C_HYGROVUE10, ADR_SDI12_HYGROVUE10, CMD_SDI12_HYGROVUE10, 1, 0.0, -1)

        ' SI-111 SS
        Therm109(si111_temp, 1, CHAN_SE_SI111, CHAN_EX_SI111, 0, 60, 1.0, 0.0)
        VoltDiff(si111_surf_temp_raw, 1, mV200, CHAN_DIFF_SI111, True, 0, 60, 1, 0)
        m = m0 + (m1*si111_temp) + (m2*si111_temp^2)
        b = b0 + (b1*si111_temp) + (b2*si111_temp^2)
        ' Tsurf_K = (m*V + b + Tk^4)^(1/4)
        si111_surf_temp = SQR(SQR(m*si111_surf_temp_raw + b (si111_temp + 273.15)^4)) - 273.15


        CallTable(SlowRawData)
        CallTable(SlowStatsData)
    NextScan

EndProg